CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Antibody>.*).*[\\/](?P<Geno>.*).*[\\/](?P<Sample>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does T "0")
    Name to assign these images:TIRF_488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "1")
    Name to assign these images:TIRF_640
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Antibody
    Metadata category:Geno

Smooth:[module_num:5|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
    Select the input image:TIRF_488
    Name the output image:TIRF_488_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:TIRF_488_Smooth
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):60,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.9
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.99
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:TIRF_640
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:TIRF_640
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:12
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    Image:None
    Objects to display:Do not use
    Number of bins:12
    Measurement:Mean Fraction
    Color map:YlOrRd
    Save display as image?:Yes
    Output image name:Heatmap

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:10|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
    Select images to measure:TIRF_640
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

DisplayDataOnImage:[module_num:11|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:AreaShape_MeanIntensity_640_TIRF
    Select the image on which to display the measurements:488_TIRF
    Text color:magenta
    Name the output image that has the measurements displayed:488_Shape
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:12|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Intensity_MeanIntensity_TIRF_640
    Select the image on which to display the measurements:TIRF_640
    Text color:magenta
    Name the output image that has the measurements displayed:Intensity_640
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TIRF_488
    Name the output image:DisplayCellon488
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:magenta
    Select objects to display:Cells

RescaleIntensity:[module_num:14|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
    Select the input image:TIRF_640
    Name the output image:TIRF_640_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TIRF_640_Rescaled
    Name the output image:DisplayCellon640
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:JS-TIRF_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:DisplayCellon488
    Select method for constructing file names:From image filename
    Select image name for file prefix:TIRF_488
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay488
    Saved file format:png
    Output file location:Default Output Folder sub-folder|png
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:DisplayCellon640
    Select method for constructing file names:From image filename
    Select image name for file prefix:TIRF_640
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay640
    Saved file format:png
    Output file location:Default Output Folder sub-folder|png
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Heatmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:TIRF_488
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Heatmap
    Saved file format:png
    Output file location:Default Input Folder sub-folder|heatmap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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